PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'Handedness': 'r/l', 'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  backgroundFit = cover
  color = -1.0000, -1.0000, 0.0902
  expName = RewardEffortLearning
  keyboardBackend = ioHub
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Routines
  Routine reward_rating
    SliderComponent reward
      fillColor = 1.0000, 0.6314, -1.0000
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.1
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [frame N] = 1
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    CodeComponent get_rating_2
      Code Type = Auto->JS
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      Begin Experiment:
        reward_ratings = []
      Begin Routine:
        event.clearEvents('keyboard')
        start_tmp = int(random()*7) + 1
        reward.markerPos = start_tmp
      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if 'left' in keys:
                reward.markerPos = reward.markerPos - 1
            elif 'right' in keys:
                reward.markerPos = reward.markerPos  + 1
      End Routine:
        rewscale_value = reward.getRating()
        reward_ratings.append(rewscale_value)

        #save data
        trials.addData("rewRating", reward.markerPos)
        trials.addData("AnchorRewRating", start_tmp)
    TextComponent text_rewardRating
      letterHeight = 0.15
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        How many gold rubies do you expect on the next planet?
    TextComponent text_rewardRating_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Navigate to your desired rating using the arrow keys and press ENTER to log it in.
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    KeyboardComponent login_reward
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = all keys
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    ImageComponent coins_little_2
      image = stim/image1.png
      pos = (-0.6, -0.4)
      size = (0.1,0.1)
      startVal [time (s)] = 0.0
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    ImageComponent coins_many_2
      image = stim/image7.png
      pos = (0.7, -0.35)
      size = (0.3,0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent photodiode_r1
      anchor = bottom-left
      fillColor = black
      lineColor = black
      pos = (-1,-1)
      shape = custom polygon...
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
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  Routine main_trial
    TextComponent trial_text
      letterHeight = 0.1
      pos = (0, .5)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Power up!
    CodeComponent computeEffort
      Code Type = Auto->JS
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      Begin Experiment:
        nincr_pSec = [0] #initialise pumps per second stored for each trial

        #initialise the thank
        tankSize = 0
        tankMaxSize = 0.55

        #intialise timer
        timer_main = None
        time_available = None

        #counter for trials as thisN does not work online
        mainCounter = -1
      Begin Routine:
        mainCounter += 1
        nincr = 0 #how many increments did they do - initialise to 0

        key_sequence = [] # List to store the key sequence in a given trial ('z' followed by 'p')
        achieved = 0 #did they pass the effort treshold? - initliased here
        firstIncr = False

        #init tank on each trial
        tankSize = 0

        #only for the first trial
        if mainCounter == 0: #on the first trial define the max presses they can do per second - should be calibrated in the practice round but otherwise set to 4 (to be safe)
            if 'max_incr_pSec_pract' not in locals() or max_incr_pSec_pract == 0:
                max_incr_pSec = 11
            else:
                max_incr_pSec = round(max_incr_pSec_pract)+1 # Round to the nearest integer
            if max_incr_pSec<1:
                max_incr_pSec = 1

            if 'time_available_pract' not in locals():
                timeAvailable = 5 #time per trial should be defined in the practice/calibration round but to be safe check here if available and otherwise defien
            else:
                timeAvailable = time_available_pract
            if 'time_available_pract' not in locals():
                time_available_main = 5
            else:
                time_available_main = time_available_pract

        tankSizeIncr = tankMaxSize/(max_incr_pSec*timeAvailable)
      Each Frame:
        # Initialize a boolean variable to track whether 'z' has been pressed
        z_pressed = False

        # Check for key presses
        keys = event.getKeys()

        if not keys:
            # No keys pressed, keep the routine running
            continueRoutine = True
        else:
            key_pressed = keys[0]
            # Check if the key pressed is 'z' and it's the first key in the sequence
            if key_pressed == 'z' and not key_sequence:
                key_sequence.append(key_pressed)
                if not z_pressed:
                    z_pressed = True  # Set the flag to indicate 'z' has been pressed
                    timer_main = core.CountdownTimer(time_available_main)  # Start the timer
            # Check if the key pressed is 'p' and 'z' was pressed before it
            elif key_pressed == 'p' and 'z' in key_sequence:
                key_sequence.append(key_pressed)

            # If the sequence is complete ('z' followed by 'p'), increase the size of the shape
            if key_sequence == ['z', 'p']:
                nincr += 1
                key_sequence = []  # Reset the key sequence

        if timer_main is not None and timer_main.getTime() <= 0:  # Check if timer has run out
            continueRoutine = False

        # Increase the fuel
        tankSize = nincr * tankSizeIncr

        if tankSize > tankMaxSize:  # Ensure it does not go beyond the battery size
            tankSize = tankMaxSize
            continueRoutine = False
        elif tankSize == tankMaxSize:
            continueRoutine = False
      End Routine:
        est_incr_ptrial = max_incr_pSec*time_available_main
        incr_shouldDo = (effLevel/ 100) * est_incr_ptrial

        if nincr  >= round(incr_shouldDo):
            achieved = True

        if max_incr_pSec < ((nincr/t)+1):
            max_incr_pSec = ((nincr/t)+1)

        nincr_pSec.append(nincr/t)
        timer_main = None # delete timer for next trial

        # Save data
        trials.addData('effLevel', effLevel)  # Corrected 'treshold' to 'threshold'
        trials.addData('points', Points)
        trials.addData('nincr_pSec', nincr_pSec)
        trials.addData('trial_duration', t)
        trials.addData('nr_of_incr', nincr)
        trials.addData('achieved', achieved)
        trials.addData('est_incr_ptrial', est_incr_ptrial)
        trials.addData('max_incr_pSec',max_incr_pSec)
        trials.addData('incr_shouldDo',incr_shouldDo)
    ImageComponent tank
      image = stim/TankOnlyEmpt-01.png
      size = (1.5,2)
      startVal [time (s)] = 0
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    PolygonComponent background
      anchor = bottom-center
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos = [0, -0.5]
      shape = rectangle
      size = [0.15, tankMaxSize]
      startVal [time (s)] = 0.0
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    PolygonComponent barBody
      anchor = bottom-center
      fillColor = '#2b773e'
      lineColor = '#2b773e'
      pos [set every frame] = [0, -0.5]
      shape = rectangle
      size [set every frame] = $[.15, tankSize]
      startVal [time (s)] = 0.0
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    PolygonComponent photodiode_mt1
      anchor = bottom-left
      fillColor = black
      lineColor = black
      pos = (-1,-1)
      shape = custom polygon...
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
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  Routine cross
    TextComponent text2_2
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    PolygonComponent photodiode_fix1
      anchor = bottom-left
      fillColor = white
      pos = (-1,-1)
      shape = custom polygon...
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine effort_rating
    SliderComponent effort
      fillColor = 1.0000, 0.6314, -1.0000
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.1
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [frame N] = 1
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    CodeComponent get_rating
      Code Type = Auto->JS
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      Begin Experiment:
        effort_ratings = []
      Begin Routine:
        event.clearEvents('keyboard')
        start_tmp_eff = int(random()*5) + 1
        effort.markerPos = start_tmp_eff
      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if 'left' in keys:
                effort.markerPos = effort.markerPos - 1
            elif 'right' in keys:
                effort.markerPos = effort.markerPos  + 1
      End Routine:
        effscale_value = effort.getRating()
        effort_ratings.append(effscale_value)

        #save data
        trials.addData('effRating',effort.markerPos)
        trials.addData("AnchorEffRating", start_tmp_eff)
    TextComponent text_effortRating_3
      letterHeight = 0.15
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        How much fuel do you think you will need to get to the next planet?
    TextComponent text_effortRating_4
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Navigate to your desired rating using the arrow keys and press ENTER to log it in.
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    KeyboardComponent effort_reward_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = all keys
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    ImageComponent fuel_empty
      image [set every repeat] = stim/fuelShipWhite.png
      pos = (-0.7, -0.3)
      size = (0.2,0.4)
      startVal [time (s)] = 0.0
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    ImageComponent fuel_full
      image = stim/fuelShipFull-01.png
      pos = (0.7, -0.3)
      size = (0.34,0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent photodiode_r1_2
      anchor = bottom-left
      fillColor = black
      lineColor = black
      pos = (-1,-1)
      shape = custom polygon...
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
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  Routine reward_rating_2
    SliderComponent reward_2
      fillColor = 1.0000, 0.6314, -1.0000
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.1
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [frame N] = 1
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent text_rewardRating_3
      letterHeight = 0.15
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
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      text:
        How many gold rubies do you expect on the next planet?
    TextComponent text_rewardRating_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Click on the scale to indicate your rating and press ENTER to log it in.
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    KeyboardComponent login_reward_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [condition] = reward.rating
      store = all keys
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    ImageComponent coins_little
      image = stim/image1.png
      pos = (-0.6, -0.4)
      size = (0.1,0.1)
      startVal [time (s)] = 0.0
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    ImageComponent coins_many
      image = stim/image7.png
      pos = (0.7, -0.35)
      size = (0.3,0.3)
      startVal [time (s)] = 0.0
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  Routine practice_instructions
    CodeComponent selectText
      Code Type = Auto->JS
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      Begin Experiment:
        instructions1=""
        instructions2=""
        instructions3=""

        slidesCounter = -1
      Begin Routine:
        slidesCounter += 1

        if slidesCounter == 0:
            instructions1="On the next screen, you will see a fuel tank marked with a red line. Your goal is to fill it up to the red line, just as demonstrated in the video."
            instructions2=""
            instructions3="Press ENTER to continue."
        else:
            instructions1="Alternate between pressing 'z' with your left index finger and 'p' with your right index finger as fast as you can to reach the red bar."
            instructions2="You will have 5 seconds to fill the tank."
            instructions3="Press ENTER to Start!"

        # Assuming "text_component_name" is the name of your Text Component
        practice_intro_text1.text = instructions1
        practice_intro_text2.text = instructions2
        practice_intro_text3.text = instructions3
    TextComponent practice_intro_text1
      letterHeight = 0.1
      pos = (0, 0.55)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent practice_intro_text2
      letterHeight = 0.1
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent practice_intro_text3
      letterHeight = 0.1
      pos = (0, -0.50)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent practice_start
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = all keys
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    ImageComponent tank_intro
      image = stim/TankOnlyEmpt-01.png
      size = (1,1.5)
      startVal [condition] = instruct_slides.thisN == 0
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    PolygonComponent background_outline_intro
      anchor = bottom-center
      fillColor = $[1.0000, 1.0000, 1.0000]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos = [0, -0.35]
      shape = rectangle
      size = [0.12,0.43]
      startVal [condition] = instruct_slides.thisN == 0
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    PolygonComponent barBody_Intro
      anchor = bottom-center
      fillColor = '#2b773e'
      lineColor = '#2b773e'
      pos [set every frame] = [0, -0.35]
      shape = rectangle
      size [set every frame] = [0.12, 0.08]
      startVal [condition] = instruct_slides.thisN == 0
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    PolygonComponent treshLine_intro
      fillColor = red
      lineColor = red
      lineWidth = 4
      pos [set every repeat] = [0, 0]
      shape = line
      size = [0.12, .08]
      startVal [condition] = instruct_slides.thisN == 0
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    PolygonComponent red_arrow
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      ori = -90
      pos = [0.15, 0]
      shape = arrow
      size = [0.12, 0.1]
      startVal [condition] = instruct_slides.thisN == 0
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    ImageComponent fingers
      image = stim/fingers.png
      pos = (0, 0.2)
      size = (0.28, 0.5)
      startVal [condition] = instruct_slides.thisN == 1
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  Routine practice
    TextComponent pract_text
      letterHeight = 0.1
      pos = (0, .5)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Power up and try to reach the red bar!
    CodeComponent practcalibration_keys
      Code Type = Auto->JS
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      Begin Experiment:
        max_incr_pract = []  #Initialize max_press
        max_incr_pSec_pract = -1

        #battery/fuel tank
        tankSize = 0
        tankMaxSize = 0.55
        time_available_pract = 5
        tscore_pract = 0
        timer_pract = None

        practCounter = -1
      Begin Routine:
        key_sequence = []  #List to store the key sequence ('z' followed by 'p')
        achieved = 0
        firstIncr = False
        rscore_pract = 0
        tankSize = 0
        achieved=False
        nIncr_pumps = 0
        tankSizeIncr_pract = tankMaxSize/50 #adapt if necessary to let the calibration tank fill quicker/slower


        practCounter += 1
      Each Frame:
        keys = event.getKeys()

        if not keys:
            # No keys pressed, keep the routine running
            continueRoutine = True
        else:
            key_pressed = keys[0]
            if key_pressed == 'z' and not key_sequence:
                key_sequence.append(key_pressed)
                if timer_pract is None:
                    timer_pract = util.CountdownTimer(time_available_pract)
            elif key_pressed == 'p' and 'z' in key_sequence:
                key_sequence.append(key_pressed)

            if key_sequence == ['z', 'p']:
                nIncr_pumps += 1
                key_sequence = []

        if (-0.5 + tankSize >= effTresh):
             achieved = True
             rscore_pract = rscore_pract + 1
             continueRoutine = False

        if timer_pract is not None and timer_pract.getTime() <= 0: #check if timer has run out
            continueRoutine = False

        #battery - fill up the fuel
        tankSize = nIncr_pumps*tankSizeIncr_pract
      End Routine:
        #add current round score to total score
        tscore_pract += rscore_pract #compute total score based on trial score
        max_incr_pract.append(nIncr_pumps/t) #compute how many increments they made per second and store
        max_incr_pSec_pract = max(max_incr_pract) #find the max incr per second over all trials (might have changed) and set it as the new standard (later to be used in the main exp)

        timer_pract = None #delete timer for next trial

        #store practice data
        practicetrials.addData('nr_of_incr_pract',nIncr_pumps)
        practicetrials.addData('trial_score_pract', rscore_pract)
        practicetrials.addData('total_score_pract', tscore_pract)
        practicetrials.addData('treshold_pract', effTresh)
        practicetrials.addData('trial_duration_pract', t)
        practicetrials.addData('max_incr_pSec_pract',max_incr_pSec_pract)
        practicetrials.addData('max_incr_pract',max_incr_pract)
    ImageComponent tank_2
      image = stim/TankOnlyEmpt-01.png
      size = (1.5,2)
      startVal [time (s)] = 0
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    PolygonComponent background_4
      anchor = bottom-center
      fillColor = 0.0902, -1.0000, -1.0000
      lineColor = 0.0902, -1.0000, -1.0000
      lineWidth = 2
      pos = [-0.5, -0.5]
      saveStartStop = False
      shape = rectangle
      size = [0.15, tankMaxSize]
      startVal [time (s)] = 0.0
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    PolygonComponent background_outline
      anchor = bottom-center
      fillColor = $[1.0000, 1.0000, 1.0000]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos = [0, -0.5]
      saveStartStop = False
      shape = rectangle
      size = [0.15, tankMaxSize]
      startVal [time (s)] = 0.0
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    PolygonComponent barBody_2
      anchor = bottom-center
      fillColor = '#2b773e'
      lineColor = '#2b773e'
      pos [set every frame] = [0, -0.5]
      saveStartStop = False
      shape = rectangle
      size [set every frame] = [.15, tankSize]
      startVal [time (s)] = 0.0
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    PolygonComponent treshLine
      fillColor = red
      lineColor = red
      lineWidth = 4
      pos [set every repeat] = [0, effTresh]
      saveStartStop = False
      shape = line
      size = [0.15, .1]
      startVal [time (s)] = 0.0
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    PolygonComponent photodiode_pr1
      anchor = bottom-left
      fillColor = black
      lineColor = black
      pos = (-1,-1)
      shape = custom polygon...
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
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  Routine practice_feedback
    CodeComponent checkAchieved_pract
      Code Type = Auto->JS
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      Begin Experiment:
        feedbackText=""
        feedbackTime=3
      Begin Routine:
        if achieved==True:
            feedbackText= 'Well done you reached the treshold!'
        elif practCounter == 7 and achieved == True:
            feedbackText= 'Well done. We will now move on to the main game!'
        elif practCounter == 7 and achieved == False:
            feedbackText= 'You completed the practice rounds. We will now move on to the main game!'
        else:
            feedbackText= 'Not quite there yet. Add a bit more power!'
    TextComponent feedbackMsg_pract
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedbackTime
      text [set every repeat] = $feedbackText
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    PolygonComponent photodiode_pr2
      anchor = bottom-left
      fillColor = white
      pos = (-1,-1)
      shape = custom polygon...
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedbackTime
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  Routine video_instr
    MovieComponent instr_train
      backend = ffpyplayer
      forceEndRoutine = False
      movie = /Users/alisaloosen/Desktop/video_v1.mp4
      size = (1, 1)
      startVal [time (s)] = 0.0
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  Routine instr_quiz
    TextComponent Multiple_Choice1
      letterHeight = 0.1
      pos = (0, 0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    TextComponent press_enter
      letterHeight = 0.07
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press ENTER to continue to the next question.
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    MouseComponent mouse
      clickable = [box1, box2, box3]
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [condition] = response>0
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    TextboxComponent box1
      bold = False
      borderColor = 0.3569, 0.6941, 0.8039
      color = grey
      editable = False
      fillColor = 1,1,1
      letterHeight = 0.08
      pos = (0, 0.1)
      size = (1.5, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $resp1
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    TextboxComponent box2
      bold = False
      borderColor = 0.3569, 0.6941, 0.8039
      color = grey
      editable = False
      fillColor = 1,1,1
      letterHeight = 0.08
      pos = (0, -0.2)
      size = (1.5, 0.2)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $resp2
    TextboxComponent box3
      bold = False
      borderColor = 0.3569, 0.6941, 0.8039
      color = grey
      editable = False
      fillColor = 1,1,1
      letterHeight = 0.08
      pos = (0, -0.5)
      size = (1.5, 0.2)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $resp3
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        quizCounter = -1

        clickables = [box1, box2, box3]
        correct = None

        check_loc3 = [0.9, -0.56]
        check_loc2 = [0.9, -0.26]
        check_loc1 = [0.9, 0.04]
        check_loc = [0,0]
      Begin Routine:
        quizCounter += 1
        # Check if it's the first repetition of the instructionquiz routine
        response = 0  # Set response to 0
        if quizCounter == 0:
            quiz_score = 0  # Initialize quiz_score to 0
        check_img.image = None
        # Reset the color of all boxes to white
        for box in clickables:
            box.fillColor = 'white'
      Each Frame:
        # Check if the mouse is pressed in any of the boxes
        if response==0:
            for clickable in clickables:
                if mouse.isPressedIn(clickable):
                # Reset the color of all boxes to white
                    for box in clickables:
                        box.fillColor = 'white'

                        if clickable == box1:
                            response = 1
                            check_loc = check_loc1
                        elif clickable == box2:
                            response = 2
                            check_loc = check_loc2
                        elif clickable == box3:
                            response = 3
                            check_loc = check_loc3
                # Check if the response is correct
                        correct = (response == correctResp)
                        if correct:
                            clickable.fillColor = 'green'
                            check_img.image = 'stim/check-01.png'
                        else:
                            clickable.fillColor = 'red'
                            check_img.image = 'stim/cross-01.png'

                        check_img.setPos(check_loc, log=False)
      End Routine:
        if correct: #update score
            quiz_score = quiz_score+1

        instructionquiz.addData('correct', correct)
        instructionquiz.addData('response', response)
        instructionquiz.addData('quiz_score', quiz_score)
    KeyboardComponent next_quest
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [condition] = response>0
      store = all keys
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    ImageComponent check_img
      pos = $check_loc
      size = (0.2, 0.5)
      startVal [time (s)] = 0
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  Routine practice_instruction_vid
    TextComponent instrText_2
      letterHeight = 0.1
      pos = [0, .3]
      startVal [time (s)] = 0.0
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      text:
        [Placeholder Intro Video
        ]
    KeyboardComponent trial_select_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = all keys
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  Routine Start
    TextboxComponent start_video
      bold = True
      editable = False
      fillColor = -0.4118, -1.0000, 0.0196
      letterHeight = 0.1
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text = PRESS ENTER TO START
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    ImageComponent rocket_full
      image = stim/fuelShipFull-01.png
      ori = -45
      pos = (0.4, 0)
      size = [0.4,0.6]
      startVal [time (s)] = 0.0
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    ImageComponent astronaut
      image = stim/astronaut.png
      pos = (-0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent experiment_start
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = all keys
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  Routine check_3
  Routine practice_video
    MovieComponent practice_instruction_video_2
      backend = ffpyplayer
      forceEndRoutine = True
      movie = stim/PractVideoEffortReward_final.mp4
      size = [2,2]
      startVal [time (s)] = 0
      volume = 10
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        movieIsPlaying = False
        movieWasPaused = False
        movieWasPlayed = False
        timeLimitPerSeek = 1  # Adjust this as needed
        currentTimeValue = 0  # Initialize the timer value
        spacePressed = True  # To toggle play/pause with space

        movieTimeframe = 0
        movieDuration = 66
      Each Frame:
        keys = event.getKeys(keyList=["space", "left", "right"])

        if "space" in keys:
            spacePressed = not spacePressed

        if "left" in keys:
            # Move the video backward by a specific time (adjust the value as needed)
            currentTimeValue -= 1  # Adjust this value to control rewind speed
            practice_instruction_video_2.seek(round(practice_instruction_video_2.duration * currentTimeValue))

        if "right" in keys:
            # Move the video forward by a specific time (adjust the value as needed)
            currentTimeValue += 1  # Adjust this value to control fast forward speed
            practice_instruction_video_2.seek(round(practice_instruction_video_2.duration * currentTimeValue))

        if spacePressed:
            practice_instruction_video_2.play()
        else:
            practice_instruction_video_2.pause()
  Routine practice_video_nocontrol
  Routine practice_video_online_2
    MovieComponent practice_instruction_video_online
      backend = ffpyplayer
      forceEndRoutine = True
      movie = stim/PractVideoEffortReward_WSubtitles.mp4
      size = [2,2]
      startVal [time (s)] = 0
      volume = 10
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    CodeComponent code_practinstr_online
      Code Type = Auto->JS
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      Begin Routine:
        movieIsPlaying = False
        movieWasPaused = False
        movieWasPlayed = False
        timeLimitPerSeek = 1  # Adjust this as needed
        currentTimeValue = 0  # Initialize the timer value
        spacePressed = False # To toggle play/pause with space

        movieTimeframe = 0
        movieDuration = 66
      Each Frame:
        keys = event.getKeys(keyList=["space", "left"])

        if "space" in keys:
            spacePressed = not spacePressed

        if "left" in keys:
            # Move the video backward by a specific time (adjust the value as needed)
            currentTimeValue -= 1  # Adjust this value to control rewind speed
            practice_instruction_video_online.seek(round(practice_instruction_video_online.duration * currentTimeValue))

        if spacePressed:
            practice_instruction_video_online.play()
            textbox_keyspract.setText('', log=False)
        else:
            practice_instruction_video_online.pause()
            textbox_keyspract.setText("Press 'space' to pause or play, and use the left 'arrow' to rewind.", log=False)
    TextboxComponent textbox_keyspract
      bold = True
      color = 0.3569, 0.6941, 1.0000
      editable = False
      letterHeight = 0.09
      pos = (0, -0.3)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [condition] = spacePressed == False
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      text:
        Press 'space' to pause or play, and use the left 'arrow' to rewind.
  Routine main_video_online
    MovieComponent main_instruction_video_online
      backend = ffpyplayer
      forceEndRoutine = False
      movie = stim/MainTaskVideoEffortReward_WSubtitles.mp4
      size = [2,2]
      startVal [time (s)] = 0
      volume = 10
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    CodeComponent code_maininstr_online
      Code Type = Auto->JS
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      Begin Routine:
        movieIsPlaying = False
        movieWasPaused = False
        movieWasPlayed = False
        timeLimitPerSeek = 1  # Adjust this as needed
        currentTimeValue = 0  # Initialize the timer value
        spacePressed = False # To toggle play/pause with space

        movieTimeframe = 0
        movieDuration = 123
      Each Frame:
        keys = event.getKeys(keyList=["space", "left","return"])

        if "space" in keys:
            spacePressed = not spacePressed

        if "left" in keys:
            # Move the video backward by a specific time (adjust the value as needed)
            currentTimeValue -= 1  # Adjust this value to control rewind speed
            main_instruction_video_online.seek(round(main_instruction_video_online.duration * currentTimeValue))

        if spacePressed:
            main_instruction_video_online.play()
            textbox_keysmain.setText('', log=False)
        else:
            main_instruction_video_online.pause()
            textbox_keysmain.setText("Press 'space' to pause or play, and use the left 'arrow' to rewind.", log=False)

        if t > main_instruction_video_online.duration and "return" in keys:
            continueRoutine = False
    TextboxComponent textbox_keysmain
      bold = True
      color = 0.3569, 0.6941, 1.0000
      editable = False
      letterHeight = 0.09
      pos = (0, -0.3)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [condition] = spacePressed == False
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      text:
        Press 'space' to pause or play, and use the left 'arrow' to rewind.
  Routine pre_quiz
    CodeComponent continue_toquiz
      Code Type = Auto->JS
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      Begin Experiment:
        prequizCounter = -1
      Begin Routine:
        prequizCounter += 1
      Each Frame:
        keys = event.getKeys(keyList=["return"])

        if prequizCounter == 0:
            announcement_quiz1.text = "We will now ask you a few questions to ensure you understood the instructions. Answer them as accurately as possible, as you will only proceed to the main game if you answer all of them correctly."
            announcement_quiz2.text = "Press ENTER to continue!"
        else:
            announcement_quiz1.text = "You have three attempts. After your third attempt, we will send you back to the instruction video so you can watch it again and afterwards give the quiz another try."
            announcement_quiz2.text = "Press ENTER to start!"

        if "return" in keys:
            continueRoutine = False  # Set to False when Enter is pressed to end the routine
    TextComponent announcement_quiz1
      letterHeight = 0.1
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0
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    TextComponent announcement_quiz2
      letterHeight = 0.1
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0
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    ImageComponent spaceship
      image = stim/fuelShipFull-01.png
      pos = (-0.5, -0.02)
      size = [0.4, 0.6]
      startVal [time (s)] = 0.0
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    ImageComponent crashed_spaceship
      image = stim/gray_simple_rocket_w_rubble.png
      pos = (0.4, -0.02)
      size = [0.3,0.6]
      startVal [time (s)] = 0.0
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  Routine feedback_quiz
    CodeComponent checkQuiz
      Code Type = Auto->JS
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      Begin Experiment:
        feedbackTextQuiz = ""
        feedbackTimeQuiz = 4
      Begin Routine:
        if quiz_score == 3:
            instructionquiz_rep.finished =True
            videorep.finished =True
            continueRoutine = False


        elif quiz_score < 3:

            if instructionquiz_rep.thisN >= 2:
                feedbackTextQuiz = "Unfortunately, not all of your answers are correct. Let's watch the instruction video again and then give it another attempt."
            else:
                feedbackTextQuiz = "Unfortunately, not all of your answers are correct. Please give it another attempt."
      End Routine:
        quiz_score = 0
    TextComponent feedbackMsgQuiz_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedbackTimeQuiz
      text [set every repeat] = $feedbackTextQuiz
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    ImageComponent feedback_image_2
      image = stim/gray_simple_rocket_w_rubble.png
      ori = 10
      pos = (0.5, -0.2)
      size = [0.3,0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedbackTimeQuiz
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  Routine start_video_2
  Routine video_main_task_start
    MovieComponent video_startmain
      backend = ffpyplayer
      forceEndRoutine = False
      movie = stim/StartTaskGame.mp4
      saveStartStop = False
      size = [2,2]
      startVal [time (s)] = 0
      volume = 10
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    KeyboardComponent key_resp_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine main_feedback
    CodeComponent checkAchieved
      Code Type = Auto->JS
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      Begin Experiment:
        feedbackText = ""
        feedbackTime = 3
      Begin Routine:
        if achieved==True:
            feedbackText=FeedbackText1
            Xout.text = ""
        else:
            feedbackText=FeedbackText2
            Xout.text = "X"
    TextComponent feedbackMsg
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedbackTime
      text [set every repeat] = $feedbackText
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    ImageComponent image_rubies
      image [set every repeat] = $stimFile
      pos = (0, -0.4)
      size = (0.3,0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedbackTime
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    TextComponent Xout
      color = red
      font = Helvetica
      letterHeight = 0.5
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $feedbackTime
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    PolygonComponent photodiode_ft1
      anchor = bottom-left
      fillColor = black
      lineColor = black
      pos = (-1,-1)
      shape = custom polygon...
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedbackTime
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  Routine end_video
    MovieComponent video_endmain
      backend = ffpyplayer
      forceEndRoutine = False
      movie = stim/EndStudyGeneral.mp4
      saveStartStop = False
      size = [2,2]
      startVal [time (s)] = 0
      volume = 10
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    KeyboardComponent end_exp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine block_break
    CodeComponent block_break_control
      Code Type = Auto->JS
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      Begin Experiment:
        blockCounter = -1
        breakTime = 15
      Begin Routine:
        blockCounter += 1

        if blockCounter == (TotalBlockNumber-1):
            continueRoutine = False
        else:
            startTimeBreak = globalClock.getTime()
      Each Frame:
        if globalClock.getTime() - startTimeBreak >= breakTime:
            continueRoutine = False
      End Routine:
        startTimeBreak = 0
    ImageComponent break_img
      image = stim/BlockEnd.png
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
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    KeyboardComponent end_break
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine starter_code
    CodeComponent code_JS
      Code Type = JS
      Before JS Experiment:
        util.addInfoFromUrl(expInfo);
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
    CodeComponent hide_mouse
      Code Type = Auto->JS
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      Begin Experiment:
        myMouse = event.Mouse()
        myMouse.setPos(newPos=(1,1))

        win.mouseVisible = False
      End Experiment:
        win.mouseVisible = True
Flow
  Routine starter_code
  LoopInitiator overall_loop loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine Start
    Routine practice_video_online_2
    LoopInitiator instruct_slides loopType="TrialHandler"
      loopType = sequential
      nReps = 2
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      Routine practice_instructions
    LoopTerminator instruct_slides
    LoopInitiator practicetrials loopType="TrialHandler"
      conditionsFile = pract1.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('practPumps', 25), ('effTresh', -0.36)]),
        OrderedDict([('practPumps', 50), ('effTresh', -0.22)]),
        OrderedDict([('practPumps', 75), ('effTresh', -0.09)]),
        OrderedDict([('practPumps', 100), ('effTresh', 0.05)]),
        OrderedDict([('practPumps', 25), ('effTresh', -0.36)]),
        OrderedDict([('practPumps', 50), ('effTresh', -0.22)]),
        OrderedDict([('practPumps', 75), ('effTresh', -0.09)]),
        OrderedDict([('practPumps', 100), ('effTresh', 0.05)])]
      Routine practice
      Routine practice_feedback
    LoopTerminator practicetrials
    LoopInitiator videorep loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 3
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      Routine main_video_online
      LoopInitiator pre_quiz_instr loopType="TrialHandler"
        loopType = sequential
        nReps = 2
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        Routine pre_quiz
      LoopTerminator pre_quiz_instr
      LoopInitiator instructionquiz_rep loopType="TrialHandler"
        loopType = sequential
        nReps = 3
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        LoopInitiator instructionquiz loopType="TrialHandler"
          conditionsFile = quiz.csv
          loopType = sequential
          nReps = 1
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          conditions:
            [OrderedDict([('correctResp', 3), ('question', 'How did the instructions mention that the requirements for fuel may change as you venture into new galaxies?'), ('resp1', '1. It never changes; everything remains constant.'), ('resp2', '2. The instructions do not mention any changes in different galaxies.'), ('resp3', '3. Fuel requirements may change, so adaptability is crucial.')]),
            OrderedDict([('correctResp', 2), ('question', 'What is the main objective of this game, and what are you required to collect on this cosmic journey?'), ('resp1', '1. To explore new galaxies and discover alien lifeforms.'), ('resp2', '2. To collect rubies on various planets.'), ('resp3', '3. To master fast key pressing techniques for space travel.')]),
            OrderedDict([('correctResp', 2), ('question', 'How should you manage your energy allocation when traveling to different planets, and why is this important?'), ('resp1', '1. You should allocate maximum energy to all journeys.'), ('resp2', '2. You should adapt to different planet requirements.'), ('resp3', '3. You should use the same amount of energy for all journeys to maintain consistency.')])]
          Routine instr_quiz
        LoopTerminator instructionquiz
        Routine feedback_quiz
      LoopTerminator instructionquiz_rep
    LoopTerminator videorep
    Routine video_main_task_start
    LoopInitiator blocks loopType="TrialHandler"
      conditionsFile = blockTypes.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('BlockNumber', 1), ('TrialFile', 'trialTypes1.csv'), ('TotalBlockNumber', 2)]),
        OrderedDict([('BlockNumber', 2), ('TrialFile', 'trialTypes2.csv'), ('TotalBlockNumber', 2)])]
      LoopInitiator trials loopType="TrialHandler"
        conditionsFile = $TrialFile
        loopType = sequential
        nReps = 1
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        conditions:
          [{'Points': 2, 'FeedbackText1': 'You reached the planet, you get 2 rubies!', 'FeedbackText2': 'You did not have enough battery to reach the planet and missed 2 rubies!', 'stimFile': 'image2.png', 'effLevel': 82},
          {'Points': 2, 'FeedbackText1': 'You reached the planet, you get 2 rubies!', 'FeedbackText2': 'You did not have enough battery to reach the planet and missed 2 rubies!', 'stimFile': 'image2.png', 'effLevel': 75},
          {'Points': 3, 'FeedbackText1': 'You reached the planet, you get 3 rubies!', 'FeedbackText2': 'You did not have enough battery to reach the planet and missed 3 rubies!', 'stimFile': 'image3.png', 'effLevel': 58},
          {'Points': 2, 'FeedbackText1': 'You reached the planet, you get 2 rubies!', 'FeedbackText2': 'You did not have enough battery to reach the planet and missed 2 rubies!', 'stimFile': 'image2.png', 'effLevel': 44},
          {'Points': 4, 'FeedbackText1': 'You reached the planet, you get 4 rubies!', 'FeedbackText2': 'You did not have enough battery to reach the planet and missed 4 rubies!', 'stimFile': 'image4.png', 'effLevel': 55},
          {'Points': 5, 'FeedbackText1': 'You reached the planet, you get 5 rubies!', 'FeedbackText2': 'You did not have enough battery to reach the planet and missed 5 rubies!', 'stimFile': 'image5.png', 'effLevel': 52},
          {'Points': 3, 'FeedbackText1': 'You reached the planet, you get 3 rubies!', 'FeedbackText2': 'You did not have enough battery to reach the planet and missed 3 rubies!', 'stimFile': 'image3.png', 'effLevel': 43}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
        Routine reward_rating
        Routine cross
        Routine effort_rating
        Routine cross
        Routine main_trial
        Routine cross
        Routine main_feedback
        Routine cross
      LoopTerminator trials
      Routine block_break
    LoopTerminator blocks
    Routine end_video
  LoopTerminator overall_loop
